PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  color = 0.0196, 0.2549, 0.0196
  expName = Iowa_Gambling_Task
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Instruction
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent Initialization
      Code Type = Py
      Begin Experiment:
        import random

        # Begin Experiment
        net_worth = 2000
        feedback_text = ""
        final_message_text = ""


        def simulateOutcome(chosen_deck, conditions):
            deck_data = conditions[chosen_deck]  # Access reward and penalty from conditions
            reward, penalty = deck_data['Reward'], deck_data['Penalty']

            if random.random() < 0.5:  # Assuming 50% chance to win/lose for demonstration
                return reward
            else:
                return penalty

        deck_positions = [(-0.5, 0), (-0.17, 0), (0.17, 0), (0.5, 0)]
        arrow_offset_y = 0.2  # Adjust this value to move the arrow higher
        current_position = random.randint(0, len(deck_positions) - 1)
    ImageComponent instruction_image
      image = Instruction_slide.png
      size = (1.645, 1.029)
      startVal [time (s)] = 0.0
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  Routine practice_instruction
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent practice_instruction_image
      image = practice_instruction.jpg
      size = (1.645, 1.029)
      startVal [time (s)] = 0.0
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  Routine Instruction_2
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent instruction_2_image
      image = Instruction_2.jpg
      size = (1.645, 1.029)
      startVal [time (s)] = 0.0
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  Routine Main_Task
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    ImageComponent deck_a_image
      image = Card.jpg
      pos = (-0.5, 0)
      size = (0.25, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent deck_b_image
      image = Card.jpg
      pos = (-0.17, 0)
      size = (0.25, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent deck_c_image
      image = Card.jpg
      pos = (0.17, 0)
      size = (0.25, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent deck_d_image
      image = Card.jpg
      pos = (0.5, 0)
      size = (0.25, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent arrow_image
      image = arrow.png
      pos = (0, 1)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    CodeComponent arrow_movement
      Code Type = Py
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      Begin Experiment:
        deck_positions = [(-0.5, 0), (-0.17, 0), (0.17, 0), (0.5, 0)]
        current_position = 0
        arrow_offset_y = 0.3  # Adjust this value to move the arrow higher
        arrow_image.pos = (deck_positions[current_position][0], deck_positions[current_position][1] + arrow_offset_y)
      Begin Routine:
        # Set arrow position at the start of each trial
        arrow_image.pos = (deck_positions[current_position][0], deck_positions[current_position][1] + arrow_offset_y)
    KeyboardComponent response_key
      allowedKeys = 'f','j','ب' , 'ت'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      End Routine:
        conditions = {
            'deck_a': {'Reward': 100, 'Penalty': -250},
            'deck_b': {'Reward': 100, 'Penalty': -1150},
            'deck_c': {'Reward': 50, 'Penalty': -25},
            'deck_d': {'Reward': 50, 'Penalty': -200},
        }

        #if response_key.keys:
        #    if 'f' in response_key.keys:
        #        chosen_action = 'deck_' + chr(97 + current_position)  # Dynamically select the deck based on arrow position
        #outcome = simulateOutcome(chosen_action, conditions)
        #        net_worth += outcome
        #        feedback_text = f"شما بازی کردید\n نتیجه: {outcome}\n  جمع پول شما اکنون: {net_worth}"
        #    elif 'j' in response_key.keys:
        #        chosen_action = 'pass'
        #        feedback_text = f"You passed. Your total remains: {net_worth}"
        def to_persian_number(number):
            english_to_persian = {
                '0': '۰', '1': '۱', '2': '۲', '3': '۳', '4': '۴',
                '5': '۵', '6': '۶', '7': '۷', '8': '۸', '9': '۹'
            }

            number_str = str(abs(number))  # Convert number to string and ignore the sign for now
            persian_number = ''.join(english_to_persian.get(char, char) for char in number_str)

            # Add negative sign to the right side if the number is negative
            if number < 0:
                persian_number += '−'

            return persian_number

        if response_key.keys:
            if 'f' or 'ب' in response_key.keys:
                chosen_action = 'deck_' + chr(97 + current_position)  # Dynamically select the deck based on arrow position
                outcome = simulateOutcome(chosen_action, conditions)
                net_worth += outcome
                feedback_text = f"شما بازی کردید\n\n نتیجه:  ${to_persian_number(outcome)}\n\n  جمع پول شما اکنون:  ${to_persian_number(net_worth)}"
            elif 'j' or 'ت' in response_key.keys:
                chosen_action = 'pass'
                feedback_text = f"شما گذشتید\n\n  جمع پول شما اکنون:  ${to_persian_number(net_worth)}"

            feedback_display.setText(feedback_text)  # Update the text component with feedback_text



            feedback_display.setText(feedback_text)  # Update the text component with feedback_text

            # Randomly move the arrow to a new position for the next trial
            current_position = random.randint(0, len(deck_positions) - 1)

            continueRoutine = False  # End the routine after making a choice
  Routine Feedback
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    TextComponent feedback_display
      font = B koodak 
      languageStyle = Arabic
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $feedback_text
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  Routine End
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    TextComponent final_message
      font = Comic Sans
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        $final_message_text
    CodeComponent code
      Code Type = Py
      Begin Routine:
        final_message_text =f"پایان بازی\n\n مبلغ نهایی شما:{to_persian_number(net_worth)} \n\n Parinaz Khosravani \n Farzad Soleimani \n\n برای خروج کلید Esc را فشار دهید."
        final_message.setText(final_message_text)
Flow
  Routine Instruction
  Routine practice_instruction
  Routine Instruction_2
  LoopInitiator loop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Deck': 'A', 'Reward': 100, 'Penalty': -250},
      {'Deck': 'B', 'Reward': 100, 'Penalty': -1150},
      {'Deck': 'C', 'Reward': 50, 'Penalty': -25},
      {'Deck': 'D', 'Reward': 50, 'Penalty': -200}]
    Routine Main_Task
    Routine Feedback
  LoopTerminator loop
  Routine End
